PsychoPy2experiment version="1.82.01"
Settings
  Data filename = 'data/%s_%s_%s' %(expInfo['participant'], expName, expInfo['date'])
  Monitor = testMonitor
  color = black
  Window size (pixels) = [800, 600]
  Full-screen window = False
  Experiment info = {u'gender': u'', u'age': u'', u'participant': u''}
  expName = MTS - OtM 3x3
  logging level = warning
  Units = use prefs
  Screen = 1
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Routines
  Routine end
    CodeComponent end_code
      Begin Routine:
        # adjust end message
        if passed_testing == True:
            end_message = 'PASSED \n\nEnd of task'
        elif passed_testing == False:
            end_message = 'FAILED \n\nEnd of task'
    TextComponent end_box
      text [set every repeat] = $end_message
      startVal [time (s)] = 0.5
      letterHeight = 0.1
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    KeyboardComponent end_resp
      forceEndRoutine = True
      allowedKeys = 'return'
      startVal [time (s)] = 0.5
      store = nothing
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  Routine feedback
    TextComponent feedback_box
      color [set every repeat] = $message_color
      text [set every repeat] = $message
      stopVal [duration (s)] = 1.0
      startVal [time (s)] = 0.5
      letterHeight = 0.1
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  Routine instruct_testing
    TextComponent inst_testing_box
      text [set every repeat] = $inst_testing
      startVal [time (s)] = 0.5
      letterHeight = 0.1
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    KeyboardComponent inst_testing_resp
      forceEndRoutine = True
      startVal [time (s)] = 1
      store = nothing
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  Routine trial
    CodeComponent trial_code
      Begin Experiment:
        # Dependencies
        import random

        # Declare variable for pass/fail training
        passed_training = False
        passed_testing = False
        total_correct = 0
        max_testing_var = 0 # by default, don't do the testing block. This gets set to 1 if training is passed.
      Begin Routine:
        # Set target stimuli categories
        # Location of the required category is set by the required response.
        # Location of the two incorrect categories is randomised.
        if required_response == 'left':  # left from block_layout.xlsx
            target_category_left = target_category_required  # latter from block_layout.xlsx
            i = [target_category_wrong_1, target_category_wrong_2]
            random.shuffle(i)
            target_category_middle = i.pop()
            target_category_right = i.pop()
        elif required_response == 'down':
            target_category_middle = target_category_required
            i = [target_category_wrong_1, target_category_wrong_2]
            random.shuffle(i)
            target_category_left = i.pop()
            target_category_right = i.pop()
        elif required_response == 'right':
            target_category_right = target_category_required
            i = [target_category_wrong_1, target_category_wrong_2]
            random.shuffle(i)
            target_category_left = i.pop()
            target_category_middle = i.pop()

        # Set specific stimuli based on categories
        # Translate a1 etc into actual exemplars from the stimuli.xlsx file
        #sample
        if sample_category == 'a1':
            sample = a1_exemplar
        elif sample_category == 'a2':
            sample = a2_exemplar
        elif sample_category == 'a3':
            sample = a3_exemplar
        elif sample_category == 'b1':  # I include B and C classes for generalisation to an equivalence task
            sample = b1_exemplar
        elif sample_category == 'b2':
            sample = b2_exemplar
        elif sample_category == 'b3':
            sample = b3_exemplar
        elif sample_category == 'c1':
            sample = c1_exemplar
        elif sample_category == 'c2':
            sample = c2_exemplar
        elif sample_category == 'c3':
            sample = c3_exemplar

        #target left
        if target_category_left == 'b1':
            target_left = b1_exemplar
        elif target_category_left == 'b2':
            target_left = b2_exemplar
        elif target_category_left == 'b3':
            target_left = b3_exemplar
        elif target_category_left == 'c1':
            target_left = c1_exemplar
        elif target_category_left == 'c2':
            target_left = c2_exemplar
        elif target_category_left == 'c3':
            target_left = c3_exemplar

        #target middle
        if target_category_middle == 'b1':
            target_middle = b1_exemplar
        elif target_category_middle == 'b2':
            target_middle = b2_exemplar
        elif target_category_middle == 'b3':
            target_middle = b3_exemplar
        elif target_category_middle == 'c1':
            target_middle = c1_exemplar
        elif target_category_middle == 'c2':
            target_middle = c2_exemplar
        elif target_category_middle == 'c3':
            target_middle = c3_exemplar

        #target right
        if target_category_right == 'b1':
            target_right = b1_exemplar
        elif target_category_right == 'b2':
            target_right = b2_exemplar
        elif target_category_right == 'b3':
            target_right = b3_exemplar
        elif target_category_right == 'c1':
            target_right = c1_exemplar
        elif target_category_right == 'c2':
            target_right = c2_exemplar
        elif target_category_right == 'c3':
            target_right = c3_exemplar
      End Routine:
        # Adjust feedback and counters based on response
        if response.corr == True:
            total_correct += 1
            message = correct_message
            message_color = 'lime'
        elif response.corr == False:
            message = wrong_message
            message_color = 'red'

        # save variables to the experiment handler to be written to the data file
        thisExp.addData('sample', sample)
        thisExp.addData('target_left', target_left)
        thisExp.addData('target_middle', target_middle)
        thisExp.addData('target_right', target_right)
    TextComponent sample_box
      text [set every repeat] = $sample
      pos = [0, 0.3]
      startVal [time (s)] = 0.5
      letterHeight = 0.1
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    TextComponent target_left_box
      text [set every repeat] = $target_left
      pos = [-.5, -.3]
      startVal [time (s)] = 1
      letterHeight = 0.1
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    TextComponent target_middle_box
      text [set every repeat] = $target_middle
      pos = [0, -.3]
      startVal [time (s)] = 1
      letterHeight = 0.1
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    TextComponent target_right_box
      text [set every repeat] = $target_right
      pos = [.5, -.3]
      startVal [time (s)] = 1
      letterHeight = 0.1
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    KeyboardComponent response
      correctAns = $required_response
      storeCorrect = True
      forceEndRoutine = True
      allowedKeys = 'left', 'down', 'right'
      startVal [time (s)] = 1
      store = first key
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  Routine post_testing
    CodeComponent post_testing_code
      End Routine:
        # End loops if mastery criterion was met
        thisExp.addData('total_correct', total_correct)

        if total_correct >= testing_criterion:
            passed_testing = True
            training_and_testing.finished = True

        thisExp.addData('passed_testing', passed_testing)

        total_correct = 0  #reset counter for more training
  Routine instruct_training
    TextComponent inst_training_box
      text [set every repeat] = $inst_training
      startVal [time (s)] = 0.5
      letterHeight = 0.1
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    KeyboardComponent inst_training_resp
      forceEndRoutine = True
      startVal [time (s)] = 1
      store = nothing
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  Routine post_training
    CodeComponent post_training_code
      End Routine:
        # End loops if mastery criterion was met
        thisExp.addData('total_correct', total_correct)

        if total_correct >= training_criterion:
            passed_training = True
            training.finished = True
            max_testing_var = max_testing

        thisExp.addData('passed_training', passed_training)

        #reset counter for testing or more training
        total_correct = 0
  Routine postblock
    CodeComponent postblock_code
      End Routine:
        # End loops if mastery criterion was met
        thisExp.addData('total_correct', total_correct)

        if total_correct >= mastery_criterion:
            passed_equivalence = True
            blocks_loop.finished = True
        else:
            total_correct = 0  #reset counter

        thisExp.addData('passed_equivalence', passed_equivalence)
  Routine instructions
    TextComponent inst_box
      startVal [time (s)] = 0.5
      letterHeight = 0.1
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      text [set every repeat]:
        $inst_intro
    KeyboardComponent inst_resp
      forceEndRoutine = True
      startVal [time (s)] = 0.5
      store = nothing
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Flow
  LoopInitiator task loopType="TrialHandler"
    conditionsFile = stimuli, instructions and parameters.xlsx
    isTrials = False
    loopType = sequential
    nReps = 1
    conditions = [{u'c1_exemplar': u'C1', u'b1_exemplar': u'B1', u'a1_exemplar': u'A1', u'c2_exemplar': u'C2', u'training_criterion': 16, u'inst_intro': u'This task will present you with nonsense words.\n\nUse the up, down, and right keys to choose the left, middle or right words respectively.\n\nPress any key to continue.', u'c3_exemplar': u'C3', u'max_training_and_testing': 2, u'testing_criterion': 8, u'inst_training': u'Learn to respond to the words based on the feedback presented.\n\nPress any key to continue.', u'a2_exemplar': u'A2', u'testing_block_length_multiplier': 1, u'b3_exemplar': u'B3', u'a3_exemp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    Routine instructions
    LoopInitiator training_and_testing loopType="TrialHandler"
      isTrials = False
      loopType = sequential
      nReps = max_training_and_testing
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      LoopInitiator training loopType="TrialHandler"
        isTrials = False
        loopType = sequential
        nReps = max_training
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        Routine instruct_training
        LoopInitiator training_trials loopType="TrialHandler"
          conditionsFile = training_block.xlsx
          loopType = random
          nReps = training_block_length_multiplier
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          conditions:
            [{u'sample_category': u'a1', u'target_category_required': u'b1', u'required_response': u'left', u'target_category_wrong_2': u'b3', u'target_category_wrong_1': u'b2', u'trial_description': u'ab'},
            {u'sample_category': u'a1', u'target_category_required': u'b1', u'required_response': u'right', u'target_category_wrong_2': u'b3', u'target_category_wrong_1': u'b2', u'trial_description': u'ab'},
            {u'sample_category': u'a1', u'target_category_required': u'b1', u'required_response': u'down', u'target_category_wrong_2': u'b3', u'target_category_wrong_1': u'b2', u'trial_description': u'ab'},
            {u'sample_category': u'a2', u'target_category_required': u'b2', u'required_response': u'left', u'target_category_wrong_2': u'b3', u'target_category_wrong_1': u'b1', u'trial_description': u'ab'},
            {u'sample_category': u'a2', u'target_category_required': u'b2', u'required_response': u'right', u'target_category_wrong_2': u'b3', u'target_category_wrong_1': u'b1', u'trial_description': u'ab'},
            {u'sample_category': u'a2', u'target_category_required': u'b2', u'required_response': u'down', u'target_category_wrong_2': u'b3', u'target_category_wrong_1': u'b1', u'trial_description': u'ab'},
            {u'sample_category': u'a3', u'target_category_required': u'b3', u'required_response': u'left', u'target_category_wrong_2': u'b2', u'target_category_wrong_1': u'b1', u'trial_description': u'ab'}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
          Routine trial
          Routine feedback
        LoopTerminator training_trials
        LoopInitiator post_trainng_loop loopType="TrialHandler"
          loopType = sequential
          nReps = 1
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          Routine post_training
        LoopTerminator post_trainng_loop
      LoopTerminator training
      LoopInitiator testing loopType="TrialHandler"
        isTrials = False
        loopType = sequential
        nReps = max_testing_var
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        Routine instruct_testing
        LoopInitiator testing_trials loopType="TrialHandler"
          conditionsFile = testing_block.xlsx
          loopType = sequential
          nReps = testing_block_length_multiplier
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          conditions:
            [{u'sample_category': u'c1', u'target_category_required': u'b1', u'required_response': u'left', u'target_category_wrong_2': u'b3', u'target_category_wrong_1': u'b2', u'trial_description': u'cb'},
            {u'sample_category': u'c1', u'target_category_required': u'b1', u'required_response': u'right', u'target_category_wrong_2': u'b3', u'target_category_wrong_1': u'b2', u'trial_description': u'cb'},
            {u'sample_category': u'c1', u'target_category_required': u'b1', u'required_response': u'down', u'target_category_wrong_2': u'b3', u'target_category_wrong_1': u'b2', u'trial_description': u'cb'},
            {u'sample_category': u'c2', u'target_category_required': u'b2', u'required_response': u'left', u'target_category_wrong_2': u'b3', u'target_category_wrong_1': u'b1', u'trial_description': u'cb'},
            {u'sample_category': u'c2', u'target_category_required': u'b2', u'required_response': u'right', u'target_category_wrong_2': u'b3', u'target_category_wrong_1': u'b1', u'trial_description': u'cb'},
            {u'sample_category': u'c2', u'target_category_required': u'b2', u'required_response': u'down', u'target_category_wrong_2': u'b3', u'target_category_wrong_1': u'b1', u'trial_description': u'cb'},
            {u'sample_category': u'c3', u'target_category_required': u'b3', u'required_response': u'left', u'target_category_wrong_2': u'b2', u'target_category_wrong_1': u'b1', u'trial_description': u'cb'}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
          Routine trial
        LoopTerminator testing_trials
        LoopInitiator post_testing_loop loopType="TrialHandler"
          loopType = sequential
          nReps = 1
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          Routine post_testing
        LoopTerminator post_testing_loop
      LoopTerminator testing
    LoopTerminator training_and_testing
    Routine end
  LoopTerminator task
